MATLABInstrumentDriver
FileVersion: 2.42
DriverName: C:\Users\neil.hamilton\Documents\MATLAB\picosdk-ps6000a-matlab-instrument-driver\picotech_ps6000a_generic.mdd
DriverType: MATLAB generic
InstrumentType: Oscilloscope
InstrumentManufacturer: Pico Technology Ltd.
InstrumentModel: PicoScope 6000E Series
InstrumentVersion: 1.0

CreateInitCode
  Code:
    function init(obj)
    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
    % Copyright © 2020 Pico Technology Ltd.  All rights reserved.
    % You may copy and distribute this file as long as it remains unmodified.
    % SB

        fprintf('PicoScope 6000 Series (A API) MATLAB Instrument Driver');
        fprintf('\n');
        fprintf('\nCopyright © 2020 Pico Technology Ltd.  All rights reserved. \n')
        fprintf('\n');

        % Load libraries
        % ==============

        % Only load library once

        if (libisloaded('ps6000a'))

               % do nothing

        else

            if (ismac())

                [ps6000aNotFound, ps6000aWarnings] = loadlibrary('libps6000a.dylib', @ps6000aMFile, 'alias', 'ps6000a');

            elseif (isunix())

                [ps6000aNotFound, ps6000aWarnings] = loadlibrary('libps6000a.so', @ps6000aMFile, 'alias', 'ps6000a');

            elseif (ispc())

                [ps6000aNotFound, ps6000aWarnings] = loadlibrary('ps6000a.dll', @ps6000aMFile);

            else

                % do nothing

            end

        end

        % Load in enums and structures

        [~, obj.DriverData.structs, obj.DriverData.enums, ~] = ps6000aMFile();

ConnectInitCode
  Code:
    function init(obj)
    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
    % Copyright © 2020 Pico Technology Ltd. All rights reserved.
    % You may copy and distribute this file as long as it remains unmodified.
    % SB

        disp('Opening PicoScope 6000 Series (A API) device');

        % Structure to hold satus values while connectin.
        connectStatus = [];

        % Temporary variable to store handle value
        unitHandle = 0;

        picoOK = PicoStatus.PICO_OK;

        % Obtain serial number input
        serialNum = get(obj, 'RsrcName');

        % determine if serial number given
        if length(serialNum) > 0

            unitSerial = serialNum;

        else

            unitSerial = [];

        end

        % Open with 8 bit resolution
        resolution8bit = obj.DriverData.enums.enPicoDeviceResolution.PICO_DR_8BIT;
        obj.DriverData.resolution = 8;

        [connectStatus.openUnit, obj.DriverData.unitHandle, ~] = ...
            calllib('ps6000a','ps6000aOpenUnit',unitHandle, unitSerial,resolution8bit);

        % Validate handle
        if (obj.DriverData.unitHandle > 0)

            unithandle = obj.DriverData.unitHandle;
    %
            % Set serial
            infoLine = blanks(40);
            reqSize = length(infoLine);

    %         [connectStatus.unitSerial, obj.DriverData.unitSerial, reSize] = ...
    %             calllib('ps6000a','ps6000aGetUnitInfo',unitHandle,infoLine, ...
    %             length(infoLine),reqSize,PicoStatus.PICO_BATCH_AND_SERIAL);
    %
    %         % Set variant
            infoLineV = blanks(15);
            reqSizeV = 15;
    %
    %         [connectStatus.unitVariant, variant, ~] = calllib('ps6000a', ...
    %             'ps6000aGetUnitInfo', unitHandle, infoLineV, length(infoLineV),...
    %             reqSizeV, PicoStatus.PICO_VARIANT_INFO);
    %
    %         set(obj, 'InstrumentModel', variant);
    %
    %         % Set channel count
    %         obj.DriverData.channelCount = str2num(obj.InstrumentModel(2));
    %
        elseif (connectStatus.openUnit == PicoStatus.PICO_NOT_FOUND)

            error('No unit found, please check connections.');

        else

            error('Status code: %d\n', connectStatus.openUnit);

        end

CleanupCode
  Code:
    function cleanup(obj)
    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
        if (isfield(obj.DriverData, 'unitHandle'))

            unitHandle = obj.DriverData.unitHandle;

            if (isempty(unitHandle))
                return;
            end

            if (~libisloaded('ps6000a'))

                return

            end

            % Close scope

            disconnectStatus = calllib('ps6000a','ps6000aCloseUnit', unitHandle);

            if (disconnectStatus == PicoStatus.PICO_OK)

                fprintf(['PicoScope closed successfully.\n']);

            elseif (disconnectStatus == PicoStatus.PICO_INVALID_HANDLE)

                return

            else

    %             if (isfield(obj.DriverData, 'unitSerial'))
    %
    %                 error('Disconnect: ConnectionNotClosed',...
    %                     ['Connection to PicoScope not closed. Status code %d\n']...
    %                     ,disconnectStatus);
    %
    %             end

            end

    %         % unload libraries if no other scopes are connected
    %
    %         firestHandle = 0;
    %
    %         if (ispc())
    %
    %             firstHandle = 16384; % Windows PC
    %
    %         else

        else
            warning('Disconnect:NoDevicesFound', 'Disconnect: No devices found.');
        end
    %
    %             firstHandle = 1; % Mac and Linux
    %
    %         end
    %
    %         % test connection to other handles
    %         lastHandle = firstHandle + 63 % obj.DriverData.constants.PICO_MAX_UNITS

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property channelCount
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property resolution
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property unitHandle
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property unitSerial
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    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never
